PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1707, 960]
  expName = SL_sali_41
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Routines
  Routine instr
    TextComponent text
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        欢迎来到本次实验

        接下来屏幕上会出现若干形状
        您的任务是找到这些形状中的独特形状（如圆形中的菱形），
        并判断该独特形状内线段的方向，
        如果线段是竖直的，请按“上”键，如果线段是水平的，请按“左”键。
        首先呈现练习试次，随后开始正式实验。

        明白后请按空格键开始。
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine iti
    TextComponent iti_blank
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5 + random() * 0.25
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  Routine feedback
    TextComponent text_4
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if feedback_text == "":
            continueRoutine = False
  Routine formal_cue
    TextComponent text_2
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        练习结束，请按空格开始实验

        再次提示，任务为找到独特形状
        （例如圆形中的菱形，或菱形中的圆形）

        并判断内部线段朝向
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        current_trial = 0
  Routine end
    TextComponent end_2
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 实验结束，谢谢参与
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  Routine fix
    PolygonComponent fix_circle
      fillColor = black
      lineColor = black
      nVertices = 9999
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine break_3
    TextComponent text_3
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        现在可以休息

        准备好了按空格键继续
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        current_trial = 0
        shuffle(trial_list_new)
        block_num=block_num+1
        if block_num == 6:
            continueRoutine = False

        thisExp.addData('block_num', block_num)
  Routine trial
    PolygonComponent fixation
      fillColor = black
      lineColor = black
      nVertices = 9999
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent loc1_shape
      colorSpace = hsv
      fillColor = [0,0,0]
      lineColor [set every repeat] = red
      lineWidth = 2
      ori = 45
      pos = (150, 0)
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc1_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (150, 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc2_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (106, 106)
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc2_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (106, 106)
      shape = line
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc3_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (0, 150)
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc3_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (0, 150)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc4_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (-106,106)
      shape = triangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc4_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (-106,106)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc5_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (-150, 0)
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc5_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (-150, 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc6_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (-106, -106)
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc6_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (-106, -106)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc7_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (0, -150)
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc7_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (0, -150)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc8_shape
      fillColor = [0,0,0]
      lineColor = red
      lineWidth = 2
      ori = 45
      pos = (106, -106)
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent loc8_line
      fillColor = black
      lineColor = black
      lineWidth = 2
      pos = (106, -106)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent resp
      allowedKeys = 'up','left'
      correctAns = $cor_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #import random
        #random = Math.random;
        block_num=0
        circle_vertices = []
        theta = []
        x=[]
        y=[]
        green=[-1,0,-1]
        red=[1,0,0]
        circle_sali_vertices=[]

        # base vertices
        for i in range(100):
            theta = 2 * pi * i / 99
            x = 25 * cos(theta)
            y = 25 * sin(theta)
            circle_vertices.append((x, y))
        a=21
        diamond_vertices = [(-a, a), (a, a), (a, -a), (-a, -a)]
        #sali vertices
        for i in range(100):
            theta = 2 * pi * i / 99
            x = 50 * cos(theta)
            y = 50 * sin(theta)
            circle_sali_vertices.append((x, y))
        c=42
        diamond_sali_vertices = [(-c, c), (c, c), (c, -c), (-c, -c)]

        #define line direction
        b=15
        hori_start=[-b,0]
        hori_end=[b,0]
        vert_start=[0,-b]
        vert_end=[0,b]

        #define loc
        c=150
        d=106
        loc1=(c,0);loc2=(d,d);loc3=(0,c);loc4=(-d,d);
        loc5=(-c,0);loc6=(-d,-d);loc7=(0,-c);loc8=(d,-d)
        locs=[loc1,loc2,loc3,loc4,loc5,loc6,loc7,loc8]
        #define loc_list
        high_prob_loc = locs[int(random() * 8)]
        low_prob_locs = [loc for loc in locs if loc != high_prob_loc]
        #define dis loc list
        distractor_locs=[]
        tar_only_locs=[]
        #distractor_locs=[high_prob_loc]*24+low_prob_locs*8  # distractor locations
        # 添加 24 个 high_prob_loc
        for _ in range(32):
            distractor_locs.append(high_prob_loc)
        # 添加 8 个每个 low_prob_loc
        for loc in low_prob_locs:
            for _ in range(8):
                distractor_locs.append(loc)
        shuffle(distractor_locs)
        #tar_only_locs = locs*5  # target locations
        # 添加 5 轮所有 locs
        for _ in range(5):
            for loc in locs:
                tar_only_locs.append(loc)
        shuffle(tar_only_locs)
        print(tar_only_locs)
        print(distractor_locs)
        #define parameter list
        shape = ['circle', 'diamond']
        distractor = ['red', 'green', 'no_dis']
        distractor_new=['red','green']
        detection  = ['hori','vert']

        # 计算基础试次数
        base_trial_count = len(shape) * len(distractor) * len(detection)  # 2×3×2=12
        repeat_times = 10  # 需要重复的次数

        # 显式构建试次列表
        trial_list_new = []
        trial = []
        for _ in range(repeat_times):
            for s in shape:
                for ds in distractor:
                    for d in detection:
                        trial = [s,ds,d,
                            'left' if d == 'hori' else 'up'
                        ]
                        trial_list_new.append(trial)  # 必须创建独立副本
        for s in shape:
            for ds in distractor_new:
                for d in detection:
                    trial = [s,ds,d,
                        'left' if d == 'hori' else 'up'
                    ]
                    trial_list_new.append(trial)

        shuffle(trial_list_new)
        # Add the distractor locations.
        j = 0
        k = 0
        filtered_locs = []
        n=[]
        random_index=[]
        tar_both_loc=[]
        new_trial=[]
        dis_loc_fake=(9999,9999)
        for i in range(128):
            new_trial=[]
            if str(trial_list_new[i][1]) == "no_dis":  # [1]指的是第二项
        #        trial_list_new[i] = trial_list_new[i]+[dis_loc_fake,tar_only_locs[k]]
                new_trial = [
                    str(trial_list_new[i][0]),  # tar_shape
                    str(trial_list_new[i][1]),  # dis_color_condi
                    str(trial_list_new[i][2]),  # tar_line
                    str(trial_list_new[i][3]),  # cor_resp
                    list([99999, 99999]),      # dis_loc（显式定义为元组）
                    list(tar_only_locs[k])     # tar_loc（确保为元组）
                ]
                trial_list_new[i] = new_trial
                k = k + 1
            else:
                filtered_locs = []
                for m in locs:
                    if m != distractor_locs[j]:
                        filtered_locs.append(m)
                n = len(filtered_locs)
                random_index = int(random() * n)  # 在Python中会调用random模块，在JS中会转为Math.random()
                tar_both_loc = filtered_locs[random_index]
        #        tar_both_loc = random.choice([m for m in locs if not m == distractor_locs[j]])
        #        trial_list_new[i] = trial_list_new[i]+[distractor_locs[j],tar_both_loc]
                new_trial = [
                    str(trial_list_new[i][0]),
                    str(trial_list_new[i][1]),
                    str(trial_list_new[i][2]),
                    str(trial_list_new[i][3]),
                    list(distractor_locs[j]),  # dis_loc
                    list(tar_both_loc)          # tar_loc
                ]
                trial_list_new[i] = new_trial

                j = j + 1
        #thisExp.addData('trial_list_new', trial_list_new)
        shuffle(trial_list_new)
        current_trial = 0
      Begin Routine:
        trial_info=trial_list_new[current_trial]
        current_trial=current_trial+1

        thisExp.addData('trial_para', trial_info)

        tar_shape=[]
        dis_color_condi=[]
        tar_line=[]
        cor_resp=[]
        dis_loc=[]
        tar_loc=[]
        #unpacking trial info
        tar_shape=trial_info[0]#目标形状
        dis_color_condi=trial_info[1]#干扰有无和颜色条件
        tar_line=trial_info[2]#目标形状内线段朝向
        cor_resp=trial_info[3]#正确反应按键
        dis_loc = trial_info[4]
        tar_loc = trial_info[5]

        thisExp.addData('tar_shape', tar_shape)
        thisExp.addData('dis_color_condi', dis_color_condi)
        thisExp.addData('tar_line', tar_line)
        thisExp.addData('cor_resp', cor_resp)
        thisExp.addData('dis_loc', dis_loc)
        thisExp.addData('tar_loc', tar_loc)

        #define maps
        shapes = {
            "loc1_shape": loc1_shape,
            "loc2_shape": loc2_shape,
            "loc3_shape": loc3_shape,
            "loc4_shape": loc4_shape,
            "loc5_shape": loc5_shape,
            "loc6_shape": loc6_shape,
            "loc7_shape": loc7_shape,
            "loc8_shape": loc8_shape
        }

        lines = {
            "loc1_shape": loc1_line,
            "loc2_shape": loc2_line,
            "loc3_shape": loc3_line,
            "loc4_shape": loc4_line,
            "loc5_shape": loc5_line,
            "loc6_shape": loc6_line,
            "loc7_shape": loc7_line,
            "loc8_shape": loc8_line
        }

        # 定义位置到组件名称的映射
        loc_to_shape_name = {
            (150, 0): "loc1_shape",
            (106, 106): "loc2_shape",
            (0, 150): "loc3_shape",
            (-106, 106): "loc4_shape",
            (-150, 0): "loc5_shape",
            (-106, -106): "loc6_shape",
            (0, -150): "loc7_shape",
            (106, -106): "loc8_shape"
        }

        # 定义形状和颜色的映射
        shape_map = {
            'circle': circle_vertices,
            'diamond': diamond_vertices
        }
        shape_sali_map = {
            'circle': circle_sali_vertices,
            'diamond': diamond_sali_vertices
        }

        colors=[]
        # 设置其他位置的形状和颜色
        other_shape = 'diamond' if tar_shape == 'circle' else 'circle'
        if dis_color_condi == 'red':
            other_color = green
        elif dis_color_condi== 'green':
            other_color = red
        elif dis_color_condi == 'no_dis':
            colors = [red, green]
            other_color = colors[int(random() * len(colors))]

        shuffle(locs)
        loc=[]
        shape_name=[]
        shape=[]
        line=[]
        line_dir=[]
        dis_line=[]
        # 遍历所有位置，设置形状和线条属性
        for i in range(len(locs)):
            loc = locs[i]
            shape_name = loc_to_shape_name[loc]
            shape = shapes[shape_name]
            line = lines[shape_name]
            if loc == tar_loc:
              shape.vertices = shape_map[tar_shape]
              shape.lineColor = other_color
              line.vertices = [hori_start, hori_end] if tar_line == 'hori' else [vert_start, vert_end]

            elif loc == dis_loc:
               shape.vertices = shape_sali_map[other_shape]
               shape.lineColor = red if dis_color_condi == 'red' else green
        #       dis_line=random.choice(['hori', 'vert'])
               dis_line=[]
               line_dir = ['hori', 'vert']
               dis_line = line_dir[int(random() * len(line_dir))]
               line.vertices = [hori_start,hori_end] if dis_line == 'hori' else [vert_start,vert_end]

            else:
                # 其他位置：设置相反的形状和颜色
                shape.vertices = shape_map[other_shape]
                shape.lineColor = other_color
                if i % 2 == 0:  # 偶数索引：水平方向
                    line.vertices = [hori_start,hori_end]
                else:  # 奇数索引：竖直方向
                    line.vertices = [vert_start,vert_end]

        feedback_text = ""
      End Routine:
        # 判断按键是否正确
        if resp.keys is None:  # 没有按键
            feedback_text = "请及时反应，集中注意力！"
        elif resp.keys != cor_resp:  # 按键错误
            feedback_text = "错误！"
        else:  # 按键正确
            feedback_text = ""  # 不显示反馈
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine fix
    Routine trial
    Routine feedback
    Routine iti
  LoopTerminator trials
  Routine formal_cue
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 128
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      Routine fix
      Routine trial
      Routine feedback
      Routine iti
    LoopTerminator trials_2
    Routine break_3
  LoopTerminator trials_3
  Routine end
